PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sonority
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating!

        Instructions will go here.
    KeyboardComponent advanceTrain1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent train2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent train2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent train2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 1 minute.

        Press any button to start now
    KeyboardComponent skipTrain2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine train2
    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    KeyboardComponent train2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
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    TextComponent chooseImageTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      text = Choose the image (f or j) that matches the audio:
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    TextComponent train2F
      letterHeight = 0.2
      pos = (-0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text = F
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    TextComponent train2J
      letterHeight = 0.2
      pos = (0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text = J
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  Routine test1
    SoundComponent test1Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0
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    ImageComponent test1Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 11
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    SoundComponent test1Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2
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    ImageComponent test1Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent test1Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    KeyboardComponent test1Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    ImageComponent test1Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent test1F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = F
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    TextComponent test1J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = J
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    TextComponent test1Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine testTrainInstr
    KeyboardComponent skipTest1Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test1warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test1warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test1warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test2
    SoundComponent test2Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
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    ImageComponent test2Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 11
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    SoundComponent test2Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2
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    ImageComponent test2Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent test2Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Mute2
      image = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    KeyboardComponent test2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    ImageComponent test2Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent test2F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = F
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    TextComponent test2J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = J
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    TextComponent test2Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine testNovel2Instr
    KeyboardComponent skipTest3Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test3warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test3warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test3warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 1 minute.

        Press any button to start now
  Routine testNovel1Instr
    KeyboardComponent skipTest2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test3
    SoundComponent test3Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
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    ImageComponent test3Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 11
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    SoundComponent test3Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2
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    ImageComponent test3Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent test3Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    KeyboardComponent test3Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    ImageComponent test3Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    TextComponent test3F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = F
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    TextComponent test3J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = J
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    TextComponent test3Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine postTestInstr
    KeyboardComponent skipPostTestInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent postTestWarning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent postTestWarning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent postTestWarning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will  start automatically
        in less than 1 minute.

        Press any button to start now
  Routine posttest
    KeyboardComponent postTestResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 7
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    SoundComponent postTestAudio1
      sound [set every repeat] = $audioA
      startVal [time (s)] = 0.0
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    ImageComponent fSound
      image = sound.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent fMute
      image = mute.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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    SoundComponent postTestAudio2
      sound [set every repeat] = $audioX
      startVal [time (s)] = 1.5
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    ImageComponent xMute1
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent xSound
      image = sound.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    ImageComponent xMute2
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 8.5
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    SoundComponent postTestAudio3
      hamming = False
      sound [set every repeat] = $audioB
      startVal [time (s)] = 3
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    ImageComponent jMute1
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent jSound
      image = sound.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent jMute2
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 7
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    TextComponent textInstrPostTest
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Does the middle audio (X) match in stress with F or J? (Press F or J)
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    TextComponent fText
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = F
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    TextComponent xText
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = X
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    TextComponent jText
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = J
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  Routine thankuser
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating!

        Press any button to end this experiment
    KeyboardComponent quit
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train2QuestInstr
    TextComponent train2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will now be presented with three questions. For each, you will hear one word and you will choose the image that corresponds to it by clicking the keys F or J.

        Press any key to advance
    KeyboardComponent train2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2
    ImageComponent imagetrain1p2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1p2QuestInstr
    TextComponent train1p2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will now be presented with three questions. For each, you will hear one word and you will choose the image that corresponds to it by clicking the keys F or J.

        Press any key to advance
    KeyboardComponent train1p2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2questions
    SoundComponent stimulitest1_2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0
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  Routine train1Instr
    TextComponent train1Type
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"The following phase of training will have " + numWords + " words presented per block."
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    KeyboardComponent skipTrain1Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1_2
    ImageComponent imagetrain1p1
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1QuestInstr_2
    TextComponent train1QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will now be presented with three questions. For each, you will hear one word and you will choose the image that corresponds to it by clicking the keys F or J.

        Press any key to advance
    KeyboardComponent train1QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1questions
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,-0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,-0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
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    KeyboardComponent train1Response
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6.0
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    TextComponent chooseImageTrain1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      text = Choose the image (f or j) that matches the audio:
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    TextComponent train1F
      letterHeight = 0.2
      pos = (-0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text = F
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    TextComponent train1J
      letterHeight = 0.2
      pos = (0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text = J
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  Routine train2Instr
    TextComponent train2Type
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"The following phase of training will have " + numWords + " words presented per block."
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    KeyboardComponent skipTrain2Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine instr
  LoopInitiator alltrian1 loopType="TrialHandler"
    conditionsFile = aoiConditions\train1Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFile', 'train1P1LoopCondition.xlsx'), ('numWords', 2)]),
      OrderedDict([('condFile', 'train1P2LoopCondition.xlsx'), ('numWords', 4)])]
    Routine train1Instr
    LoopInitiator trial1phases loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = sequential
      nReps = 1
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      LoopInitiator train1Words loopType="TrialHandler"
        conditionsFile = $condFiles
        loopType = sequential
        nReps = 1
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        Routine train1_2
      LoopTerminator train1Words
      Routine train1QuestInstr_2
      LoopInitiator train1Questions loopType="TrialHandler"
        conditionsFile = $testFiles
        loopType = sequential
        nReps = 1
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        Routine train1questions
      LoopTerminator train1Questions
    LoopTerminator trial1phases
  LoopTerminator alltrian1
  Routine instr2
  LoopInitiator alltrain2 loopType="TrialHandler"
    conditionsFile = aoiConditions\train2Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFile', 'aoiConditions/train2P1LoopCondition.xlsx'), ('numWords', 'two')]),
      OrderedDict([('condFile', 'aoiConditions/train2P2LoopCondition.xlsx'), ('numWords', 'four')])]
    Routine train2Instr
    LoopInitiator trial2phases loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = sequential
      nReps = 1
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      LoopInitiator train2Words loopType="TrialHandler"
        conditionsFile = $condFiles
        loopType = sequential
        nReps = 1
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        Routine train2
      LoopTerminator train2Words
      Routine train2QuestInstr
      LoopInitiator train2Questions loopType="TrialHandler"
        conditionsFile = $testFiles
        loopType = sequential
        nReps = 1
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        Routine trainquestions2
      LoopTerminator train2Questions
    LoopTerminator trial2phases
  LoopTerminator alltrain2
  Routine testTrainInstr
  LoopInitiator test1Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test1Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'trainingaudio/20_tatito3.wav'), ('secondAudio', 'trainingaudio/20_tatito1.wav'), ('imageLoc', 'pngimages/20_pizza.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'trainingaudio/14_pokoto1.wav'), ('secondAudio', 'trainingaudio/14_pokoto2.wav'), ('imageLoc', 'pngimages/14_coffee.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'trainingaudio/24_takopa3.wav'), ('secondAudio', 'trainingaudio/24_takopa1.wav'), ('imageLoc', 'pngimages/24_banana.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'trainingaudio/26_kapako1.wav'), ('secondAudio', 'trainingaudio/26_kapako2.wav'), ('imageLoc', 'pngimages/26_pineapple.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'trainingaudio/19_papipi2.wav'), ('secondAudio', 'trainingaudio/19_papipi1.wav'), ('imageLoc', 'pngimages/19_burger.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'trainingaudio/15_kopota3.wav'), ('secondAudio', 'trainingaudio/15_kopota1.wav'), ('imageLoc', 'pngimages/15_barrel.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'trainingaudio/04_kitoti2.wav'), ('secondAudio', 'trainingaudio/04_kitoti1.wav'), ('imageLoc', 'pngimages/04_ladder.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'trainingaudio/16_kotapi2.wav'), ('secondAudio', 'trainingaudio/16_kotapi1.wav'), ('imageLoc', 'pngimages/16_icecream.png'), ('whichAudio', 1)])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
    Routine test1
  LoopTerminator test1Loop
  Routine testNovel1Instr
  LoopInitiator test2Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test2Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'novelaudio/61_pikati2.wav'), ('secondAudio', 'novelaudio/61_pikati1.wav'), ('imageLoc', 'pngimages/61_key.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/41_pototo2.wav'), ('secondAudio', 'novelaudio/41_pototo1.wav'), ('imageLoc', 'pngimages/41_piano.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/79_katapi1.wav'), ('secondAudio', 'novelaudio/79_katapi2.wav'), ('imageLoc', 'pngimages/79_pig.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/32_kipoto2.wav'), ('secondAudio', 'novelaudio/32_kipoto1.wav'), ('imageLoc', 'pngimages/32_greenpepper.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/34_kipaki2.wav'), ('secondAudio', 'novelaudio/34_kipaki1.wav'), ('imageLoc', 'pngimages/34_knife.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/59_tipoko2.wav'), ('secondAudio', 'novelaudio/59_tipoko3.wav'), ('imageLoc', 'pngimages/59_umbrella.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/54_kapapa1.wav'), ('secondAudio', 'novelaudio/54_kapapa3.wav'), ('imageLoc', 'pngimages/54_toiletpaper.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/57_tipipa3.wav'), ('secondAudio', 'novelaudio/57_tipipa1.wav'), ('imageLoc', 'pngimages/57_flashlight.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/52_pakaki3.wav'), ('secondAudio', 'novelaudio/52_pakaki1.wav'), ('imageLoc', 'pngimages/52_newspaper.png'), ('whichAudio', 2)])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
    Routine test2
  LoopTerminator test2Loop
  Routine testNovel2Instr
  LoopInitiator test3Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test3Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'novelaudio/72_topata3.wav'), ('secondAudio', 'novelaudio/72_topata2.wav'), ('imageLoc', 'pngimages/72_nose.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/40_kototi1.wav'), ('secondAudio', 'novelaudio/40_kototi2.wav'), ('imageLoc', 'pngimages/40_spoon.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/77_takopo1.wav'), ('secondAudio', 'novelaudio/77_takopo2.wav'), ('imageLoc', 'pngimages/77_bear.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/73_takiti3.wav'), ('secondAudio', 'novelaudio/73_takiti1.wav'), ('imageLoc', 'pngimages/73_car.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/44_pokato1.wav'), ('secondAudio', 'novelaudio/44_pokato2.wav'), ('imageLoc', 'pngimages/44_envelope.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/81_kakapa2.wav'), ('secondAudio', 'novelaudio/81_kakapa1.wav'), ('imageLoc', 'pngimages/81_cat.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/36_pipapa2.wav'), ('secondAudio', 'novelaudio/36_pipapa3.wav'), ('imageLoc', 'pngimages/36_microwave.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/28_pipiki3.wav'), ('secondAudio', 'novelaudio/28_pipiki1.wav'), ('imageLoc', 'pngimages/28_grape.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/57_tipipa3.wav'), ('secondAudio', 'novelaudio/57_tipipa1.wav'), ('imageLoc', 'pngimages/57_flashlight.png'), ('whichAudio', 1)])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
    Routine test3
  LoopTerminator test3Loop
  Routine postTestInstr
  LoopInitiator postTestLoop loopType="TrialHandler"
    conditionsFile = postTestConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audioA', '82_word1.wav'), ('audioB', '82_word3.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '83_word3.wav'), ('audioB', '83_word2.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '84_word3.wav'), ('audioB', '84_word1.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '85_word2.wav'), ('audioB', '85_word3.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '86_word2.wav'), ('audioB', '85_word1.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '87_word1.wav'), ('audioB', '87_word3.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '88_word2.wav'), ('audioB', '88_word1.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '89_word3.wav'), ('audioB', '89_word2.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '90_word2.wav'), ('audioB', '90_word3.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '91_word1.wav'), ('audioB', '91_word2.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '92_word1.wav'), ('audioB', '92_word2.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '93_word3.wav'), ('audioB', '93_word1.wav'), ('correctLabel', 'audioA')])]
    Routine posttest
  LoopTerminator postTestLoop
  Routine thankuser
